// Min_wave_fast_profile
// ImageJ macro for detecting GUVs and getting the Min wave profile inside GUVs for downstream analysis
// Validated only for Fiji v1.54p or later
// Input: 2D or 3D-stacked time-lapse image files with fluorescently labeled (inside or membrane) GUVs
// Resulting data sets are saved as CSV files or a Zip file (for ROIs)
// For detailed information: Kohyama et al, Nature Communications 2022
//
// Shunshi Kohyama (The University of Tokyo), 2026

// Set image information and target channel, slice, threshold method, and threshold values
title = getTitle();
methods = getList("threshold.methods");
getVoxelSize(width, height, depth, unit);
interval =  Stack.getFrameInterval();
Dialog.create("Min wave analysis");
if (unit != "µm") {
	Dialog.addMessage("                          Please check!!", 12, "red");
}
Dialog.addNumber("Set scale (µm in a pixel)", width);
if (interval == 0) {
	Dialog.addMessage("                          Please check!!", 12, "red");
}
Dialog.addNumber("Set interval (sec)", interval);
Dialog.addNumber("Set channel (color)", 1);
Dialog.addNumber("Set slice (z position)", 1);
Dialog.addNumber("Set frame (time point)", 1);
Dialog.addChoice("Threshold method", methods, "Huang");
Dialog.addNumber("Minimal diameter for detection (µm)", 15);
Dialog.addNumber("Maximal diameter for detection (µm)", 50);
Dialog.addNumber("Minimal circularity for detection", 0.60);
Dialog.addNumber("Maximal circularity for detection", 1.00);
Dialog.show();
scale = Dialog.getNumber();
interval = Dialog.getNumber();
channel = Dialog.getNumber();
slice = Dialog.getNumber();
frame = Dialog.getNumber();
type = Dialog.getChoice();
min = Dialog.getNumber();
max = Dialog.getNumber();
minCirc = Dialog.getNumber();
maxCirc = Dialog.getNumber();
minArea = PI * pow((min/2), 2);
maxArea =  PI * pow((max/2), 2);
run("ROI Manager...");
run("Set Scale...", "distance=1 known=scale pixel=1 unit=µm");

setBatchMode(true);
// Set target channel, slice and then duplicate, apply thresholding, and add ROIs to the ROI manager
run("Duplicate...", "duplicate channels=channel slices=slice");
Stack.setFrame(frame);

redo = false;
while (redo == false) {
	run("Duplicate...", " ");
	setAutoThreshold(type+" dark");
	run("Convert to Mask");
	run("Analyze Particles...", "size=minArea-maxArea circularity=minCirc-maxCirc clear include add");
	close();
	roiManager("Show All with labels");
	
	setBatchMode("show");
	beep();
	Dialog.create("Re-do detection?");
	Dialog.addCheckbox("Proceed to circle fitting", true);
	Dialog.addNumber("Searching range (um)", 5);
	Dialog.addCheckbox("Add ROIs manually", false);
	Dialog.addMessage("Otherwise, choose the new thresholds for detection");
	Dialog.addChoice("Threshold method", methods, "Huang");
	Dialog.addNumber("Minimal diameter for detection (µm)", min);
	Dialog.addNumber("Maximal diameter for detection (µm)", max);
	Dialog.addNumber("Minimal circularity for detection", minCirc);
	Dialog.addNumber("Maximal circularity for detection", maxCirc);
	Dialog.show();
	redo = Dialog.getCheckbox();
	range = Dialog.getNumber();
	skip = Dialog.getCheckbox();
	type = Dialog.getChoice();
	min = Dialog.getNumber();
	max = Dialog.getNumber();
	minCirc = Dialog.getNumber();
	maxCirc = Dialog.getNumber();
	minArea = PI * pow((min/2), 2);
	maxArea =  PI * pow((max/2), 2);
	
	run("Remove Overlay");
	setBatchMode("hide");
}

// Manually delete or add ROIs, the ROIs should be a slightly larger circle than the target GUVs peripheral
if (skip == true) {
	roiManager("Show All with labels");
	setBatchMode("show");
	waitForUser("Add or delete ROIs");
	setBatchMode("hide");
}

// Determine the GUVs by scanning the highest weighted-intensity profile of the peripheral
N = roiManager("count");
pixels = Math.ceil(range/scale);
for (i = 0; i < N; i++) {
	roiManager("select", 0);
	getSelectionBounds(x, y, w, h); // Get the boundary (starting position and size) of the selected ROI
	d = minOf(w, h); // Set the d (minimal diameter of the circle for searching) as the smaller length of either x or y axis
	if (pixels > d) {
		pixels = d;
	}
	roiManager("Delete");
	
	I = 0;
	for (j = 0; j < pixels; j++) {
		makeOval(x, y, d - j, d - j); // Make the circle at top-left position inside selected ROI, the size of the ROI decreases 
		run("Area to Line"); // convert the circle to a circular line (as it is for calculation of the peripheral intensity)
		for (k = 0; k <= h - d + j; k++) {
			for (l = 0; l <= w - d + j; l++) {
				Roi.move(x + l, y + k); // move the circular line to every position inside the boundary
				getRawStatistics(nPixels, mean, min, max, std, histogram); // get the statistics of the circular line
				if (I < mean * nPixels) { // calculate the weighted-intensity (total intensity) of the peripheral and rewrite the ROI with the highest value
					I = mean * nPixels;
					X = x + l;
					Y = y + k;
					D = d - j;						
				}
			}
		}
	}
	makeOval(X, Y, D, D);
	run("Area to Line");
	roiManager("add");
}
run("Select None");

setBatchMode("show");
run("Remove Overlay");
roiManager("show all with labels");
beep();
Dialog.create("File name");
Dialog.addString("Title", title);
Dialog.show();
title = Dialog.getString();
dir = getDirectory("Choose a Directory");
n = nSlices;

setBatchMode("hide");
run("Clear Results");
for (i = 0; i < N; i++) {
	roiManager("select", i);
	roiManager("rename", title + "_" + i + 1);
	setResult("ID", i, Roi.getName() + ".csv");
	setResult("diameter", i, getValue("Height"));
}
saveAs("Results", dir + title + "_metadata.csv");

for (i = 0; i < N; i++) {
	roiManager("select", i);
	Result = Roi.getName() + ".csv";
	run("Straighten...", "title=straight line=5 process");
	w = getValue("Width");
	run("Size...", "width=w height=1 depth=n average interpolation=Bicubic");
	run("Clear Results");
	
	for(j = 0; j < n; j++) {
		makeLine(0, 0, w - 1, 0);
		Stack.setSlice(j + 1);
		profile = getProfile();
		Table.setColumn(interval * j, profile);
		}
	saveAs("Results", dir + Result);
	run("Close", "Results");
	close();
}

roiManager("save", dir+title+"_ROI.zip")
close(); // For original image
setBatchMode(false);
